PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '999', 'session': '1', 'run_number': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = regulation_of_craving
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Routines
  Routine trial
    PolygonComponent fixation
      durationEstim = 1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (48, 48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
      units = pix
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    PolygonComponent background
      fillColor [set every repeat] = $background_color
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width, window_height)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 11
      units = pix
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    PolygonComponent black_background
      fillColor = $[-1,-1,-1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width - 150, window_height - 150)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 11
      units = pix
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    TextComponent regulate_look
      letterHeight = 0.075
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 2
      text [set every repeat] = $regulate_or_look
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    ImageComponent stimulus
      image [set every repeat] = $image_file
      startEstim = 3
      startVal [time (s)] = $jitter_duration + 2
      stopVal [duration (s)] = 5.0
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    TextComponent rating_text
      letterHeight = 0.075
      pos = (0, 0.1)
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4.0
      text = How much do you desire the item shown in the last picture?
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    RatingScaleComponent stim_rating
      customize_everything = low=1, high=5, labels=['No Desire', 'Strong Desire'], scale='', showAccept=False, maxTime=3.8, respKeys=['1', '2', '3', '4', '5'], depth=-10, disappear=True
      forceEndRoutine = True
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4
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  Routine instructions
    TextComponent start_text
      durationEstim = 2
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $start_text_str
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    KeyboardComponent start_trigger
      durationEstim = 2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent end_text
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = The task is now complete.
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  Routine setup
    CodeComponent get_window_size
      Code Type = Auto->JS
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      Begin Experiment:
        # Get window width and height
        window_width = win.clientSize[0]
        window_height = win.clientSize[1]
    CodeComponent get_conditions_file
      Code Type = Auto->JS
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      Begin Experiment:
        def is_mri_session(session: str) -> bool:
            return session == '1' or session == '2'


        participant = expInfo['participant']
        session = expInfo['session']
        run_number = expInfo['run_number']

        #
        # Determine the input conditions file based on the session number.
        # Session numbers 1 and 2 are in the MRI scanner.
        # Session numbers 3, 4, and 5 are behavorial, not performed in the scanner.
        # Display different start text / instructions for behavioral sessions compared with MRI scan sessions.
        if is_mri_session(session):
            session_type = 'scan'
            start_text_str = 'Calibrating scanner.\nPlease hold VERY still.'
        else:
            session_type = 'beh'
            start_text_str = 'The task is about to begin.\nGet ready!'
        conditions_file = 'ROC_Session' + str(session) + '.csv'

        # If a practice run
        if run_number == '0':
            conditions_file = 'ROC_practice.csv'
            continueRoutine = False
  Routine ratings
Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine end
